OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. Those
  data will later be used to train a classifier
  for online use.

  Using Tux instead of graz...

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/signals/).
Comment
  Tux must be started beforehand so that
  LSL stimulations can be read!
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

LSL stim reader => #0
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_lsl_stims.py
  Stream type = Markers
  Stream name = Tuxracer
  Get all streams = false
  debug = true
  Overcome code check = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Acquisition client => #2
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#2.Signal stream -> Channel Rename => #3
  New channel names = Fp1;Fz;F3;F7;FT9;FC5;FC1;C3;T7;TP9;CP5;CP1;Pz;P3;P7;O1;Oz;O2;P4;P8;TP10;CP6;CP2;Cz;C4;T8;FT10;FC6;FC2;F4;F8;FP2;accX;accY;accZ
  0x8d21ff41 = ${Player_ScenarioDirectory}/acticap_channels_name.cfg
Experiment information=#2.Experiment information, Signal=#3, Stimulation=#0 -> GDF file writer
  Filename = ${Player_ScenarioDirectory}/signals/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}].gdf
