OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  --:: Remember to change the file
  to the one you recorded before!
Comment
  Overview

  This scenario should be used to train
  the LDA classifier used to detect
  left / right hand movements

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition or 4-online and fast forward
  this scenario.

  At the end of the training, you will have an estimation
  of the classifier performance printed in the console.
  If this performance is lower than 65%, just run a new
  1-acquisition session to have better results.
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.

  Then the Stimulation Based Epoching box
  is used to select four seconds of signal half a second
  after the instruction was shown to the user
  (OVTK_GDF_Left and OVTK_GDF_Right).

  The signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Trainer box produces a
  configuration file at the end of the experiment
  which will be used during online sessions.

  When the training is completed the box
  outputs a stimulation OVTK_StimulationId_TrainCompleted
  to stop the scenario through a Player Controller

GDF file reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/concatenated_training.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "EEG chans"
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Channel Selector "!20"
  Channel List = 20
  Action = Reject
  Channel Matching Method = Smart
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 13.0
  High cut frequency (Hz) = 15.0
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/signals/frequencyBandSelected.cfg
Input stream 1=#3, Input stream 2=#0.Stimulations -> Identity => #4
#4.Output stream 1 -> CSP Spatial Filter => #5
  Spatial Filter Coefficients = -4.017546e-001 -3.522788e-001 -9.802327e-004 6.908590e-002 -8.434244e-002 -1.052647e-001 -1.616481e-001 -1.618176e-002 -8.008736e-002 4.226550e-002 6.211065e-003 4.336094e-002 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0.000000e+000
  Number of Output Channels = 6
  Number of Input Channels = 34
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/signals/csp-spatial-filter_fix.cfg
Input signal=#5, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 3.5
  Epoch offset (in sec) = -0.5
  Stimulation to epoch from = OVTK_GDF_Left
  0x8d21ff41 = ${Player_ScenarioDirectory}/epoching_left.cfg
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Input signal=#5, Input stimulations=#4.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 3.5
  Epoch offset (in sec) = -0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #17
Stimulations=#4.Output stream 2, Features for class 1=#11, Features for class 2=#17 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/signals/motor-imagery-bci-config-classifier_fix.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Linear
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
