OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Fabien Lotte
0x9f5c4075 = Frequency band selection
0xf8034a49 = Inria Bordeaux Sud-Ouest
Comment
  Select here the channels to compute a laplacian
  around the channels of interest for the BCI at hand
  (e.g., channels for a Laplacian around C3 et C4 for a left and right hand motor imagery BCI)
Comment
  Apply a spatial filter to compute the Laplacian around the selected channels
Comment
  Frequency Band Selection:
  A box to select a good frequency band to discriminate two EEG classes from the input EEG channel data.
  Based on the Heuristic algorithm by Blankertz et al, IEEE Sig Proc Mag, 2008
  The found frequency band is saved to a config file for a temporal filter
  A 'OVTK_StimulationId_TrainCompleted' stimulation is sent as output when the training is complete

  Parameters:
  Class 1 stimulation label: the stimulation label defining the begininng of a trial from the first class
  Class 2 stimulation label: the stimulation label defining the begininng of a trial from the second class
  Train Stimulation: the stimulation label indicated that all trials are finished and that the frequency selection algorithm can start
  MinFrequency: the minimal frequency that will be considered for the best band
  MaxFrequency: the maximal frequency that will be considered for the best band
  Output config filename: the config filename where to store the obtained frequency band (a temporal filter config filename)

Training EEG data file reader => #0
  Filename = /home/jfrey/flow/script-openVibe/cross_valid/dataset-orig/subject_test1_training.gdf
  Samples per buffer = 4
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "FC5; FC1; C3; CP5; CP1; FC2;FC6; C4; CP2; CP6"
  Channel List = FC5; FC1; C3; CP5; CP1; FC2;FC6; C4; CP2; CP6
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Laplacian C3 & C4" => #2
  Spatial Filter Coefficients = -1;-1;4;-1;-1;0;0;0;0;0;0;0;0;0;0;-1;-1;4;-1;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
Input signal=#2, Input stimulations=#0.Stimulations -> Stimulation based epoching "Cue + 0.5s" => #3
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = -0.75
  Stimulation to epoch from = OVTK_GDF_Feedback_Continuous
EEG epochs=#3, class Stimulation=#0.Stimulations -> Frequency Band Selection
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/frequencyBandSelection.py
  Class 1 stimulation label = OVTK_GDF_Left
  Class 2 stimulation label = OVTK_GDF_Right
  Train Stimulation = OVTK_StimulationId_Train
  MinFrequency = 5
  MaxFrequency = 35
  Output config filename = ${Player_ScenarioDirectory}/frequencyBandSelected.cfg
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
